PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this experiment, you will be shown a series of words and characters. At the end, you have to type the words in the series as best as you can remember.


        'press spacebar to continue'
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine practice
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    TextComponent distractor_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.053
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.105
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.159
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.212
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.265
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target1
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    TextComponent distractor_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.318
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.371
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.424
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target2
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    TextComponent distractor_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.477
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_9
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.53
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.583
      stopVal [duration (s)] = 0.053
      text = %%%%
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  Routine practice_instructions
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        This is the practice round.

        You will be shown either characters like %%%%% or a word like "book" at a very fast speed. try to remember the word shown in the series.

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine practice_response
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    CodeComponent accuracy_check
      Code Type = Auto->JS
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      End Routine:
        if textbox.text == target1:
            thisExp.addData("f1_accuracy", 1)
        else:
            thisExp.addData("f1_accuracy", 0)

        if textbox_2.text == target2:
            thisExp.addData("f2_accuracy", 1)
        else:
            thisExp.addData("f2_accuracy", 0)
    TextboxComponent textbox
      bold = False
      borderWidth = 1
      editable = True
      letterHeight = 0.03
      placeholder = 1st word you remember
      size = (0.8, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent practice_response_instructions
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = type the two words you saw as best as you can remember
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.03
      placeholder = second word
      pos = (0, -0.1)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = submit
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  Routine instructions_testphase
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    TextComponent instruction
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Now we are moving on to test phase.

        If you miss the word, try to make your best guess.

        Press the spacebar to continue
    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine countdown
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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  Routine fixation
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine routine_50_ms
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    TextComponent distractor
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_11
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_12
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_13
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_14
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target_3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target1
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    TextComponent distractor_15
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_16
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target_4
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target2
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    TextComponent distractor_17
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_18
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_19
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.1
      text = %%%%
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  Routine response
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    CodeComponent accuracy_check_2
      Code Type = Auto->JS
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      End Routine:
        if textbox_3.text == target1:
            thisExp.addData("f1_accuracy", 1)
        else:
            thisExp.addData("f1_accuracy", 0)

        if textbox_4.text == target2:
            thisExp.addData("f2_accuracy", 1)
        else:
            thisExp.addData("f2_accuracy", 0)
    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.03
      placeholder = first word you saw
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent practice_response_instructions_2
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = type the two words you saw as best as you can remember
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    TextboxComponent textbox_4
      bold = False
      editable = True
      letterHeight = 0.03
      placeholder = second word
      pos = (0, -0.1)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = submit
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  Routine fixation_2
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    PolygonComponent cross_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine fixation_100ms
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    PolygonComponent cross_3
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine routine_100ms
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    TextComponent distractor_20
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_21
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_22
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_23
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_24
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target_5
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target1
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    TextComponent distractor_25
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_26
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target_6
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target2
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    TextComponent distractor_27
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_28
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_29
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.1
      text = %%%%
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  Routine response_100ms
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    CodeComponent accuracy_check_3
      Code Type = Auto->JS
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      End Routine:
        if textbox_5.text == target1:
            thisExp.addData("f1_accuracy", 1)
        else:
            thisExp.addData("f1_accuracy", 0)

        if textbox_6.text == target2:
            thisExp.addData("f2_accuracy", 1)
        else:
            thisExp.addData("f2_accuracy", 0)
    TextboxComponent textbox_5
      bold = False
      editable = True
      letterHeight = 0.03
      placeholder = first word you saw
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent practice_response_instructions_3
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = type the two words you saw as best as you can remember
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    TextboxComponent textbox_6
      bold = False
      editable = True
      letterHeight = 0.03
      placeholder = second word
      pos = (0, -0.1)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = submit
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  Routine routine_200ms
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    TextComponent distractor_30
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_31
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_32
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target_7
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target1
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    TextComponent distractor_33
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_34
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_35
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_36
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target_8
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target2
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    TextComponent distractor_37
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_38
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_39
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.1
      text = %%%%
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  Routine response_200ms
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    CodeComponent accuracy_check_4
      Code Type = Auto->JS
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      End Routine:
        if textbox_7.text == target1:
            thisExp.addData("f1_accuracy", 1)
        else:
            thisExp.addData("f1_accuracy", 0)

        if textbox_8.text == target2:
            thisExp.addData("f2_accuracy", 1)
        else:
            thisExp.addData("f2_accuracy", 0)
    TextboxComponent textbox_7
      bold = False
      editable = True
      letterHeight = 0.03
      placeholder = first word you saw
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent practice_response_instructions_4
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = type the two words you saw as best as you can remember
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    TextboxComponent textbox_8
      bold = False
      editable = True
      letterHeight = 0.03
      placeholder = second word
      pos = (0, -0.1)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent button_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = submit
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  Routine routine_400ms
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    TextComponent distractor_40
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target1
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    TextComponent distractor_41
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_42
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_43
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_44
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_45
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_46
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_47
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_48
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target_9
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target2
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    TextComponent distractor_49
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.1
      text = %%%%
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  Routine response_400ms
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  Routine routine_600ms
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    TextComponent distractor_50
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent target_11
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target1
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    TextComponent distractor_51
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_52
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_53
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_54
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_55
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_56
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_57
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_58
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_59
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_60
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent distractor_61
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_62
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.1
      text = &&&&
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    TextComponent target_12
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $target2
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    TextComponent distractor_63
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.1
      text = %%%%
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    TextComponent distractor_64
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.1
      text = &&&&
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  Routine response_600ms
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  Routine thank_you
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    TextComponent text_norm_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        thank you for taking part :))

        Press the spacebar to exit
    KeyboardComponent key_instruct_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine routine_53ms
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    TextComponent distractor_65
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_66
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.053
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_67
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.105
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_68
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.159
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_69
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.212
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_10
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.265
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target1
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    TextComponent distractor_70
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.318
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_71
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.371
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_13
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.424
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target2
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    TextComponent distractor_72
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.477
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_73
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.53
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_74
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.583
      stopVal [duration (s)] = 0.053
      text = %%%%
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  Routine routine_1
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    TextComponent distractor_75
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_76
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.053
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_77
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.105
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_78
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.159
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_79
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.212
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_14
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.265
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target1
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    TextComponent distractor_80
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.318
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_81
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.371
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_15
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.424
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target2
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    TextComponent distractor_82
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.477
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_83
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.53
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_84
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.583
      stopVal [duration (s)] = 0.053
      text = %%%%
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  Routine routine_2
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  Routine routine_34
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    TextComponent distractor_95
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_96
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.053
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_97
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.105
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_98
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.159
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent target_18
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.212
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target1
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    TextComponent distractor_99
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.265
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_100
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.318
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_101
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.371
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_102
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.424
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent target_19
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.477
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target2
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    TextComponent distractor_103
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.53
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_104
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.583
      stopVal [duration (s)] = 0.053
      text = %%%%
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  Routine routine_4
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    TextComponent distractor_105
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_20
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.053
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target1
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    TextComponent distractor_107
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.105
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_108
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.159
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_106
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.212
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_109
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.265
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_110
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.318
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_111
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.371
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_112
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.424
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_113
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.477
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_21
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.53
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target2
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    TextComponent distractor_114
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.583
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_132
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.636
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_133
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.689
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_134
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.742
      stopVal [duration (s)] = 0.053
      text = %%%%
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  Routine routine_5
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    TextComponent distractor_115
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_22
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.053
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target1
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    TextComponent distractor_116
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.105
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_117
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.159
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_118
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.212
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_119
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.265
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_120
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.318
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_121
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.371
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_122
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.424
      stopVal [duration (s)] = 0.053
      text = &&&&
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    TextComponent distractor_123
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.477
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_124
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.53
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_125
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.583
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_126
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.636
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_127
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.689
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent target_23
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.742
      stopVal [duration (s)] = 0.053
      text [set every repeat] = $target2
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    TextComponent distractor_128
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.795
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_129
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.848
      stopVal [duration (s)] = 0.053
      text = %%%%
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    TextComponent distractor_130
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.901
      stopVal [duration (s)] = 0.053
      text = %%%%
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
Flow
  Routine Instructions
  Routine practice_instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'target1': 'bird', 'target2': ' rain'},
      {'target1': 'blow', 'target2': ' care'},
      {'target1': 'boat', 'target2': ' cold'},
      {'target1': 'book', 'target2': ' dark'},
      {'target1': 'calm', 'target2': ' heat'},
      {'target1': None, 'target2': None},
      {'target1': None, 'target2': None},
      {'target1': None, 'target2': None},
      {'target1': None, 'target2': None},
      {'target1': None, 'target2': None}]
    Routine fixation
    Routine practice
    Routine practice_response
  LoopTerminator trials
  Routine instructions_testphase
  Routine countdown
  LoopInitiator counter_balance loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator trials_50ms loopType="TrialHandler"
      conditionsFile = 50ms.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'target1': 'word', 'target2': 'bird', 'SOA': 50},
        {'target1': 'cute', 'target2': 'boot', 'SOA': 50},
        {'target1': 'loot', 'target2': 'nuke', 'SOA': 50},
        {'target1': 'work', 'target2': 'best', 'SOA': 50},
        {'target1': 'life', 'target2': 'good', 'SOA': 50},
        {'target1': 'name', 'target2': 'care', 'SOA': 50},
        {'target1': 'help', 'target2': 'time', 'SOA': 50}]
      Routine fixation_2
      Routine routine_1
      Routine response
    LoopTerminator trials_50ms
    LoopInitiator trials_100ms loopType="TrialHandler"
      conditionsFile = 100ms.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'target1': 'word', 'target2': 'bird', 'SOA': 100},
        {'target1': 'cute', 'target2': 'boot', 'SOA': 100},
        {'target1': 'loot', 'target2': 'nuke', 'SOA': 100},
        {'target1': 'work', 'target2': 'best', 'SOA': 100},
        {'target1': 'life', 'target2': 'good', 'SOA': 100},
        {'target1': 'name', 'target2': 'care', 'SOA': 100},
        {'target1': 'help', 'target2': 'time', 'SOA': 100}]
      Routine fixation_100ms
      Routine routine_2
      Routine response_100ms
    LoopTerminator trials_100ms
    LoopInitiator trials_200ms loopType="TrialHandler"
      conditionsFile = 200ms.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'target1': 'word', 'target2': 'bird', 'SOA': 200},
        {'target1': 'cute', 'target2': 'boot', 'SOA': 200},
        {'target1': 'loot', 'target2': 'nuke', 'SOA': 200},
        {'target1': 'work', 'target2': 'best', 'SOA': 200},
        {'target1': 'life', 'target2': 'good', 'SOA': 200},
        {'target1': 'name', 'target2': 'care', 'SOA': 200},
        {'target1': 'help', 'target2': 'time', 'SOA': 200}]
      Routine fixation
      Routine routine_34
      Routine response_200ms
    LoopTerminator trials_200ms
    LoopInitiator trials_400ms loopType="TrialHandler"
      conditionsFile = 400ms.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'target1': 'word', 'target2': 'bird', 'SOA': 400},
        {'target1': 'cute', 'target2': 'boot', 'SOA': 400},
        {'target1': 'loot', 'target2': 'nuke', 'SOA': 400},
        {'target1': 'work', 'target2': 'best', 'SOA': 400},
        {'target1': 'life', 'target2': 'good', 'SOA': 400},
        {'target1': 'name', 'target2': 'care', 'SOA': 400},
        {'target1': 'help', 'target2': 'time', 'SOA': 400}]
      Routine fixation
      Routine routine_4
      Routine response_400ms
    LoopTerminator trials_400ms
    LoopInitiator trials_600ms loopType="TrialHandler"
      conditionsFile = 600ms.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'target1': 'word', 'target2': 'bird', 'SOA': 600},
        {'target1': 'cute', 'target2': 'boot', 'SOA': 600},
        {'target1': 'loot', 'target2': 'nuke', 'SOA': 600},
        {'target1': 'work', 'target2': 'best', 'SOA': 600},
        {'target1': 'life', 'target2': 'good', 'SOA': 600},
        {'target1': 'name', 'target2': 'care', 'SOA': 600},
        {'target1': 'help', 'target2': 'time', 'SOA': 600}]
      Routine fixation
      Routine routine_5
      Routine response_600ms
    LoopTerminator trials_600ms
  LoopTerminator counter_balance
  Routine thank_you
